PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = main
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Introduction
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        Benvenuti!

        State per iniziare un esperimento composto da due parti.
        Ogni parte è introdotta dalle istruzioni che vi spiegheranno ciò che dovete fare in seguito.
        Alla fine della prima parte, ci sarà una piccola pausa indicata da un messaggio. Grazie per la vostra partecipazione all'esperimento!
    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
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Flow
  Routine trial
